PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'nblock': '10', 'tr_reps': '15', 'TR': '1.3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SoundTest
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine grasp
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    TextComponent GraspDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"GRASP\n\nrep {grasp_block.thisN+1}/{grasp_block.nTotal}\nblock {full_block.thisN+1}/{nblock} @ TR {TR}s\n\nTR{grasp_block.thisN+1 + (2*tr_reps*full_block.thisN)} {core.getTime() - starttime:.2f} s"
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    SoundComponent graspSnd
      sound [set every repeat] = mixkit-elevator-tone-2863.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent grasp_tr_lock
      allowedKeys [set every repeat] = trigger_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent RestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"REST\n\nrep {rest_block.thisN+1}/{rest_block.nTotal}\nblock {full_block.thisN+1}/{nblock} @ TR {TR}s\n\nTR {tr_reps + rest_block.thisN+1 + (2*tr_reps*full_block.thisN)} {core.getTime() - starttime:.2f} s"
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    KeyboardComponent rest_tr_lock
      allowedKeys = trigger_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine settings
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    VariableComponent TR
      startExpValue = float(expInfo.get('TR',1.3))
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    VariableComponent nblock
      startExpValue = int(expInfo.get('nblock',10))
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    VariableComponent tr_reps
      startExpValue = int(expInfo['tr_reps'])
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    VariableComponent trigger_keys
      startExpValue = ['equal']
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    VariableComponent starttime
      startExpValue = 0
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  Routine waitForScanner
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    TextComponent wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for the scanner to start
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = trigger_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # kludge! should be able to get
        #  start+duration of waitForScanner or time of keypress
        # instead we get a manual timestamp into var defined in settings
        starttime = core.getTime()
  Routine instructions
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    KeyboardComponent instr_wait
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"This is the hand grasp task\n\nWhen you hear the repeated tone:\n Squeeze your hand\n\nWhen there is no tone:\n  Rest\n\n\n[Push space to continue]\n\n{nblock} blocks of 2 events (graps,resp)*{tr_reps}\n nTRs ={nblock*2*tr_reps}\n @ {TR}s = {TR*nblock*2*tr_reps}s"
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  Routine done
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    TextComponent done_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Grasp task finished!\n\nEnd Time: {core.getTime()}\nStart time: {starttime}\nTotal Duration: {core.getTime()-starttime} + last tr ({TR}s)"
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    KeyboardComponent done_key
      allowedKeys = 'y','n','left','right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine settings
  Routine instructions
  Routine waitForScanner
  LoopInitiator full_block loopType="TrialHandler"
    loopType = random
    nReps = nblock
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    LoopInitiator grasp_block loopType="TrialHandler"
      loopType = random
      nReps = tr_reps
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      Routine grasp
    LoopTerminator grasp_block
    LoopInitiator rest_block loopType="TrialHandler"
      loopType = random
      nReps = tr_reps
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      Routine rest
    LoopTerminator rest_block
  LoopTerminator full_block
  Routine done
